PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = STROOP EFFECT 2
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text_3
      color [set every repeat] = $colors
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'r','b','y','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent record_gaze
      Code Type = Auto->JS
      Begin Experiment:
        window.gazeSamples = [];
        window.gazeStart = performance.now();

        window.webgazer.setGazeListener(function (data) {
          if (data !== null) {
            window.gazeSamples.push({
              x: data.x,
              y: data.y,
              time: performance.now() - window.gazeStart
            });
          }
        });
      End Routine:
        window.webgazer.clearGazeListener();

        psychoJS.experiment.addData(
          "gaze_samples",
          JSON.stringify(window.gazeSamples)
        );

        psychoJS.experiment.addData(
          "gaze_sample_count",
          window.gazeSamples.length
        );
  Routine INTRODUCTION
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    TextComponent text
      color = PINK
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        WELCOME TO THE STROOP TEST!
        PRESS 'SPACE' TO ENTER
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine INSTRUCTIONS
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    TextComponent text_2
      color = PINK
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        STROOP TEST INSTRUCTIONS

        Respond to the INK COLOUR, not the word.

        R = Red | G = Green | B = Blue | Y = Yellow

        Respond as quickly and accurately as possible.

        Press 'SPACE' to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FIXATION
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine FIXATION_2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine BYE_BYE
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    TextComponent text_6
      color = PINK
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        THANK YOU FOR YOUR TIME
        BYE BYE!
  Routine WEBCAM_SETUP
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    CodeComponent start_webcam
      Code Type = Auto->JS
      Begin Experiment:
        window.eyeReady = false;
        window.eyeError = "";

        let script = document.createElement("script");
        script.src =
          "https://cdn.jsdelivr.net/npm/webgazer@3.5.3/dist/webgazer.min.js";

        script.onload = async function () {
          try {
            await window.webgazer
              .setRegression("ridge")
              .begin();

            window.webgazer.showPredictionPoints(false);
            window.eyeReady = true;
          } catch (err) {
            window.eyeError = String(err);
            console.error("Webcam error:", err);
          }
        };

        script.onerror = function () {
          window.eyeError = "Could not load WebGazer";
        };

        document.head.appendChild(script);
      Each Frame:
        if (window.eyeReady) {
          continueRoutine = false;
        }

        if (window.eyeError) {
          throw new Error(window.eyeError);
        }
  Routine CALIBERATION
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    CodeComponent calibrate_webcam
      Code Type = Auto->JS
      Begin Experiment:
        window.calibrationDone = false;

        // Create calibration screen
        let overlay = document.createElement("div");
        overlay.id = "eye-calibration";
        Object.assign(overlay.style, {
          position: "fixed",
          inset: "0",
          background: "white",
          zIndex: "99999"
        });
        document.body.appendChild(overlay);

        // Nine calibration positions
        let points = [];
        for (let y of [20, 50, 80]) {
          for (let x of [15, 50, 85]) {
            points.push([x, y]);
          }
        }

        // Repeat each position three times
        points = [...points, ...points, ...points];
        let current = 0;

        function showCalibrationDot() {
          overlay.innerHTML = "";

          let instructions = document.createElement("p");
          instructions.textContent =
            "Look at the red dot and click it. " +
            (current + 1) + " / " + points.length;

          Object.assign(instructions.style, {
            color: "black",
            textAlign: "center",
            fontSize: "22px",
            marginTop: "20px"
          });
          overlay.appendChild(instructions);

          let dot = document.createElement("button");
          Object.assign(dot.style, {
            position: "absolute",
            left: points[current][0] + "%",
            top: points[current][1] + "%",
            transform: "translate(-50%, -50%)",
            width: "38px",
            height: "38px",
            borderRadius: "50%",
            border: "2px solid black",
            background: "red",
            cursor: "pointer"
          });

          dot.onclick = function () {
            current++;

            if (current === points.length) {
              overlay.remove();
              window.calibrationDone = true;
            } else {
              showCalibrationDot();
            }
          };

          overlay.appendChild(dot);
        }

        showCalibrationDot();
      Each Frame:
        if (window.calibrationDone) {
          continueRoutine = false;
        }
Flow
  Routine INTRODUCTION
  Routine WEBCAM_SETUP
  Routine CALIBERATION
  Routine INSTRUCTIONS
  Routine FIXATION
  LoopInitiator X loopType="TrialHandler"
    conditionsFile = stroop task 5 excel2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'RED', 'colors': 'red', 'condition': 'congruent', 'correct': 'r'},
      {'word': 'BLUE', 'colors': 'blue', 'condition': 'congruent', 'correct': 'b'},
      {'word': 'GREEN', 'colors': 'green', 'condition': 'congruent', 'correct': 'g'},
      {'word': 'YELLOW', 'colors': 'yellow', 'condition': 'congruent', 'correct': 'y'},
      {'word': 'BLUE', 'colors': 'blue', 'condition': 'congruent', 'correct': 'b'},
      {'word': 'RED', 'colors': 'red', 'condition': 'congruent', 'correct': 'r'},
      {'word': 'YELLOW', 'colors': 'yellow', 'condition': 'congruent', 'correct': 'y'},
      {'word': 'GREEN', 'colors': 'green', 'condition': 'congruent', 'correct': 'g'},
      {'word': 'RED', 'colors': 'red', 'condition': 'congruent', 'correct': 'r'},
      {'word': 'GREEN', 'colors': 'green', 'condition': 'congruent', 'correct': 'g'},
      {'word': 'BLUE', 'colors': 'blue', 'condition': 'congruent', 'correct': 'b'},
      {'word': 'YELLOW', 'colors': 'yellow', 'condition': 'congruent', 'correct': 'y'},
      {'word': 'GREEN', 'colors': 'green', 'condition': 'congruent', 'correct': 'g'},
      {'word': 'RED', 'colors': 'red', 'condition': 'congruent', 'correct': 'r'},
      {'word': 'BLUE', 'colors': 'blue', 'condition': 'congruent', 'correct': 'b'},
      {'word': 'YELLOW', 'colors': 'yellow', 'condition': 'congruent', 'correct': 'y'},
      {'word': 'RED', 'colors': 'red', 'condition': 'congruent', 'correct': 'r'},
      {'word': 'GREEN', 'colors': 'green', 'condition': 'congruent', 'correct': 'g'},
      {'word': 'YELLOW', 'colors': 'yellow', 'condition': 'congruent', 'correct': 'y'}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
    Routine trial
  LoopTerminator X
  Routine FIXATION_2
  Routine BYE_BYE
